PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1422, 800]
  Full-screen window = False
  expName = Tetris-Workload
  Screen = 1
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Routines
  Routine IntroText3
    TextComponent intro3_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Das Spiel steuern Sie mit den Pfeiltasten sowie der Leertaste.

        Linke & rechte Pfeiltaste = Bewegen des Spielsteins nach links bzw. rechts
        Obere Pfeiltaste = Drehen des Spielsteins
        Untere Pfeiltaste = Schnelleres Fallenlassen des Spielsteins
        Leertaste = Spielstein fällt sofort auf die tiefste Position
    TextComponent intro3_text_2
      color = black
      text = Weiter durch drücken der Leertaste
      pos = (0, -0.5)
      startVal [time (s)] = 3
      letterHeight = 0.08
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine IntroText2
    TextComponent Intro2_text
      color = black
      text = Der Geruch wird Ihnen während des Spielens in Blöcken präsentiert. Atmen Sie ruhig und normal.
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    TextComponent intro2_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_intensity
    RatingScaleComponent intensity
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 2.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_ratingintensity
      color = black
      text = Wie intensiv haben Sie diesen Geruch empfunden?
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine IntroText5
    TextComponent intro5_text_1
      color = black
      text = Falls Sie vor Ablauf der Zeit eine Runde Tetris verlieren sollten, startet sofort eine neue Runde Tetris. Wir bitten Sie darum, einfach weiterzuspielen.
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    TextComponent intro5_text_2
      color = black
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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      text:
        Haben Sie noch Fragen?

        Falls nicht, drücken Sie die Leertaste um das Experiment zu starten.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine IntroText4
    TextComponent Intro4_text
      color = black
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Bei jedem Geruch stoppt das Spiel nach circa einer Minute und die Applikation des Geruchs wird beendet.
        Es erscheint dann eine Bewertungsskala für die Intensität des vorangegangenen Geruchs und anschließend eine für den Schwierigkeitsgrad des Spiels.
        Die 10 steht dabei für einen sehr intensiven Geruch bzw. einen sehr hohen Schwierigkeitsgrad und die 1 für einen sehr schwachen Geruch bzw. einen sehr niedrigen Schwierigkeitsgrad.

        Bitte verschieben Sie den Marker durch die linke und rechte Pfeiltaste an die gewünschte Position und bestätigen Sie Ihre Eingabe mit der Eingabetaste.
    TextComponent Intro4_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.85)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    TextComponent stimulus_plus
      text = +
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        import serial
        import time

        port = serial.Serial("COM4", 19200, timeout=0.5)
      Begin Routine:
        channel = number_in_olf


        for i in range(0, 13):
            port.write(b"\nF%d\r" %channel)
            time.sleep(2.0)
            print("OLF Trigger No.  %d" %i)

        port.write(b"\nF%d\r" %channel)
      End Experiment:
        port.close()
  Routine choose_difficulty
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 50
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_2
      text = trial
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine EndText
    TextComponent EndText1
      color = black
      text = Vielen Dank für Ihre Teilnahme.
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0
      letterHeight = 0.08
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  Routine rating_difficulty
    RatingScaleComponent difficulty
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 2.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_ratingdifficulty
      color = black
      text = Wie schwer fanden Sie diese Runde Tetris?
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine nextRow
    CodeComponent nextRow_code
      Begin Routine:
        thisExp.nextEntry()
  Routine Tetris
    CodeComponent code_2
      Begin Experiment:
        import tetris
        import serial

        try:
            port = serial.Serial('COM4', 19200) # when testing WITH OLF
        except serial.SerialException:
            print("Couldnt find COM port. Using port = 'none'")
            port = 'none' # when testing withOUT OLF
      Begin Routine:
        # to decrease runtime to speed up testing
        runtime = 5 # usualy runtime = 56

        logging.log(level=logging.EXP, msg='Starting Tetris ...')
        print("The current odor is %s in channel %d" %(odor, channel))
        returnval = tetris.main(difficulty_level-1, runtime, thisExp, trials, port, channel, logging)
        logging.log(level=logging.EXP, msg= 'Tetris returned: %d' %returnval)

        trials.addData('trial.test', odor)

        # to remove
        print('Tetris returned: %d' %returnval)
      End Experiment:
        if port != 'none':
            port.close()
    TextComponent text
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tetris finished
        it returned
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_val
      text [set every frame] = $returnval
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_3
      color = black
      text = Drücken Sie die Leertaste um fortzufahren.
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine IntroText
    TextComponent Intro1_text1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        In diesem Experiment lassen wir Sie Tetris spielen und werden Ihnen dabei die Gerüche Banane, Orange, Leder, Holz sowie einen Leerduft präsentieren.

        Ihre Aufgabe ist es, nach Ablauf der Spielzeit die Intensität des Geruchs sowie den Schwierigkeitsgrad des Spiels zu bewerten.
        Es ist dabei möglich, dass Sie keinen Geruch riechen.
    TextComponent Intro1_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Spacer
    TextComponent spacer_text
      color = black
      text = Eine neue Runde Tetris startet bald...
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine IntroText
  Routine IntroText2
  Routine IntroText3
  Routine IntroText4
  Routine IntroText5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials-data.xlsx
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('odor', u'Leder'), ('difficulty_level', 10), ('channel', 1)]),
      OrderedDict([('odor', u'Holz'), ('difficulty_level', 10), ('channel', 2)]),
      OrderedDict([('odor', u'Banane'), ('difficulty_level', 10), ('channel', 3)]),
      OrderedDict([('odor', u'Orange'), ('difficulty_level', 10), ('channel', 4)]),
      OrderedDict([('odor', u'Wasser'), ('difficulty_level', 10), ('channel', 7)]),
      OrderedDict([('odor', u'Leder'), ('difficulty_level', 40), ('channel', 1)]),
      OrderedDict([('odor', u'Holz'), ('difficulty_level', 40), ('channel', 2)]),
      OrderedDict([('odor', u'Banane'), ('difficulty_level', 40), ('channel', 3)]),
      OrderedDict([('odor', u'Orange'), ('difficulty_level', 40), ('channel', 4)]),
      OrderedDict([('odor', u'Wasser'), ('difficulty_level', 40), ('channel', 7)])]
    Routine Spacer
    Routine Tetris
    Routine rating_intensity
    Routine rating_difficulty
    Routine nextRow
  LoopTerminator trials
  Routine EndText
