PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1422, 800]
  Full-screen window = False
  expName = WorkloadV1.0
  Screen = 1
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Routines
  Routine IntroText3
    TextComponent Intro3_text
      color = black
      text = Nach jedem Duftstoff stoppt das Spiel und sie werden gebeten den Duftstoff auf einer Skala von 1-10 hinsichtlich seiner Intensität zu bewerten.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Intro3_text2
      color = black
      text = Start des Experiments durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine IntroText2
    TextComponent Intro2_text
      color = black
      text = Der Geruch wird Ihnen während des Spielens in Blöcken präsentiert. Atmen sie ruhig und normal.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent intro2_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_intensity
    RatingScaleComponent intensity
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Bitte bewerten sie nun die Intensität des vorangegangenen Duftstoffs. Dabei steht 1 für eine niedrige Intensität und 10 für eine hohe Intensität.
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  Routine stimulus
    TextComponent stimulus_plus
      text = +
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        import serial
        import time

        port = serial.Serial("COM4", 19200, timeout=0.5)
      Begin Routine:
        channel = number_in_olf


        for i in range(0, 13):
            port.write(b"\nF%d\r" %channel)
            time.sleep(2.0)
            print("OLF Trigger No.  %d" %i)

        port.write(b"\nF%d\r" %channel)
      End Experiment:
        port.close()
  Routine choose_difficulty
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 50
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_2
      text = trial
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine EndText
    TextComponent EndText1
      text = Byee...
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine rating_difficulty
    RatingScaleComponent difficulty
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Bitte bewerten sie nun die Schwierigkeit der Runde, die sie gerade gespielt haben. 1 steht für eine sehr einfache, 10 für eine sehr schwere Runde.
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  Routine Spacer
    TextComponent spacer_text
      color = black
      text = Eine neue Runde Tetris startet bald...
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Tetris
    CodeComponent code_2
      Begin Experiment:
        import tetris
        serial = 'none'
        port = 'none'
      Begin Routine:
        runtime = 5 # usualy runtime = 56
        returnval = tetris.main(difficulty_level-1, runtime, thisExp, port, channel)


        print('Tetris returned: %d' %returnval)
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tetris finished
        it returned
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_val
      text [set every frame] = $returnval
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine IntroText
    TextComponent Intro1_text1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In diesem Experiment lassen wir sie Tetris spielen und werden Ihnen dabei die Gerüche Banane, Orange, Ledern Holz sowie einen Leerduft präsentieren.

        Ihre Aufgabe ist es, nach Ablauf der Spielzeit die Intensität des Geruchs zu bewerten.
    TextComponent Intro1_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine IntroText
  Routine IntroText2
  Routine IntroText3
  LoopInitiator repeats loopType="TrialHandler"
    conditionsFile = workload_data.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('odor', u'Leder'), ('difficulty_level', 5), ('number_in_olf', 1)]),
      OrderedDict([('odor', u'Holz'), ('difficulty_level', 5), ('number_in_olf', 2)]),
      OrderedDict([('odor', u'Banane'), ('difficulty_level', 5), ('number_in_olf', 3)]),
      OrderedDict([('odor', u'Orange'), ('difficulty_level', 5), ('number_in_olf', 4)]),
      OrderedDict([('odor', u'Wasser'), ('difficulty_level', 5), ('number_in_olf', 7)]),
      OrderedDict([('odor', u'Leder'), ('difficulty_level', 25), ('number_in_olf', 1)]),
      OrderedDict([('odor', u'Holz'), ('difficulty_level', 25), ('number_in_olf', 2)]),
      OrderedDict([('odor', u'Banane'), ('difficulty_level', 25), ('number_in_olf', 3)]),
      OrderedDict([('odor', u'Orange'), ('difficulty_level', 25), ('number_in_olf', 4)]),
      OrderedDict([('odor', u'Wasser'), ('difficulty_level', 25), ('number_in_olf', 7)])]
    Routine Spacer
    Routine Tetris
    Routine rating_intensity
    Routine rating_difficulty
  LoopTerminator repeats
  Routine EndText
