PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1600, 900]
  Full-screen window = False
  expName = tetris_test
  Screen = 1
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Routines
  Routine trial
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        trial
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 50
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine welcome
    TextComponent text
      text = hi darling
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Routine:
        #logging.data("STARTED logging.data")
        #logging.exp("STARTED logging.exp")
        #logging.info("STARTED logging.info")
        #thisExp.addData('welcome', 'Hello World')
        #thisExp.addData('welcome.time', 42)

        #thisExp.nextEntry()
  Routine bye
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        bye
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine tetris
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tetris finished
        it returned
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        import tetris
      Begin Routine:
        # thread01 = Thread(target = tetris.main, args=[])
        # print 'Starting thread ...\n\n'
        # thread01.start()
        # thread01.join()
        # print '\n\nThread finished!'

        print('\nStarting Tetris now\n')

        returnval = tetris.main(rating.getRating()-1, thisExp, 'COM4', 4)

        print('Tetris returned: %d' %returnval)
    TextComponent text_val
      text [set every frame] = $returnval
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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Flow
  Routine welcome
  Routine trial
  Routine tetris
  Routine bye
